<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:CreateArduino">
          <ard:Name>MyArduino</ard:Name>
          <ard:PortName>COM3</ard:PortName>
          <ard:BaudRate>57600</ard:BaudRate>
          <ard:SamplingInterval>19</ard:SamplingInterval>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>MyArduino</ard:PortName>
          <ard:Pin>1</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>500</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>MySignal</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MySignal</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Output1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isON?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>ON</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>MySignal</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Output2</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Condition">
              <Name>isOFF?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>OFF</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>