<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="LessThan" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>Left</gli:Key>
          <gli:Modifiers xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:KeyDown">
          <gli:Key>Right</gli:Key>
          <gli:Modifiers xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>false</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:First" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Equal" />
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawText.bonsai">
        <ExtentX>1</ExtentX>
        <ExtentY>1</ExtentY>
        <Text>A or B?</Text>
        <Font>Microsoft Sans Serif, 72pt</Font>
        <Alignment>Center</Alignment>
        <LineAlignment>Center</LineAlignment>
        <TextRenderingHint>AntiAliasGridFit</TextRenderingHint>
        <Color>
          <Val0>255</Val0>
          <Val1>255</Val1>
          <Val2>255</Val2>
          <Val3>255</Val3>
        </Color>
        <LocationX>0</LocationX>
        <LocationY>0</LocationY>
        <Layer>0</Layer>
        <Angle>0</Angle>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DelaySubscription">
          <gl:DueTime>PT1S</gl:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="8" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>