<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p1="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="WorkflowProperty" TypeArguments="p1:Point2f">
          <Value>
            <X>320</X>
            <Y>240</Y>
          </Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Math.Sqrt(X*X + Y*Y)</scr:Expression>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Amplitude" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>441</dsp:BufferLength>
          <dsp:Frequency>200</dsp:Frequency>
          <dsp:Waveform>Sine</dsp:Waveform>
          <dsp:SampleRate>44100</dsp:SampleRate>
          <dsp:Amplitude>500</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="al:AudioPlayback">
          <al:SampleRate>44100</al:SampleRate>
          <al:State>Playing</al:State>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>