<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:ipy="clr-namespace:Bonsai.Scripting.IronPython;assembly=Bonsai.Scripting.IronPython"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:SortBinaryRegions" />
      </Expression>
      <Expression xsi:type="ipy:PythonTransform">
        <ipy:Script>from math import sqrt

@returns(float)
def process(value):

  # no objects were detected
  if value.Count == 0:
    return float.NaN

  # only one object was detected, assume objects are touching
  elif value.Count == 1:
    return 0

  # two or more objects were detected, compute distance
  else:
    # d: displacement between two largest objects
    d = value[0].Centroid - value[1].Centroid
    return sqrt(d.X * d.X + d.Y * d.Y)
</ipy:Script>
      </Expression>
      <Expression xsi:type="LessThan">
        <Operand xsi:type="DoubleProperty">
          <Value>100</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:DigitalOutput">
          <ard:Pin>13</ard:Pin>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>