<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:ard="clr-namespace:Bonsai.Arduino;assembly=Bonsai.Arduino"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:VideoWriter">
          <cv:FileName>response.avi</cv:FileName>
          <cv:Suffix>None</cv:Suffix>
          <cv:Buffered>true</cv:Buffered>
          <cv:Overwrite>false</cv:Overwrite>
          <cv:FourCC>FMP4</cv:FourCC>
          <cv:FrameRate>30</cv:FrameRate>
          <cv:FrameSize>
            <cv:Width>0</cv:Width>
            <cv:Height>0</cv:Height>
          </cv:FrameSize>
          <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="ard:AnalogInput">
          <ard:PortName>Arduino</ard:PortName>
          <ard:Pin>2</ard:Pin>
        </Combinator>
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="IntProperty">
          <Value>512</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count>100</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>response-trigger.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="7" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>