<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT3S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StimOn</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Led</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Response</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Response</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT1S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Sink">
        <Name>StimOff</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Led</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Success</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Reward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>Miss</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Fail</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="6" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>